PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 2160]
  expName = maia-reinforcement-learning
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Routines
  Routine instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Instructions

        Go here!
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine getready
    TextComponent Ready
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = get ready
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  Routine stimuli
  Routine fixation
    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = A PICTURE OF MONEY
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine getready
    Routine fixation
    Routine stimuli
    Routine feedback
  LoopTerminator trials
